PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = stroop
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Routines
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Simple Stroop

        Name the color of the word on the screen.
        Do not read the word!

        If the word is red, press 'r'.
        If the word is blue, press 'b'.
        If the word is green, press 'g'.

        Press Space when you are ready.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    TextComponent trial_text
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $word
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    KeyboardComponent trial_key
      allowedKeys = 'r', 'g', 'b'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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  Routine thanks
    TextComponent thanks_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation!

        Press Space to end the experiment.
    KeyboardComponent thanks_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Py
      Begin Experiment:
        msg = ""
        msg_color = "white"
      Begin Routine:
        if trial_key.keys:
            if trial_key.corr:
                msg = "Correct!"
                msg_color = "green"
            else:
                msg = "Wrong!"
                msg_color = "red"
        else:
            msg = "Too slow!"
            msg_color = "white"
    TextComponent feedback_text
      color [set every repeat] = $msg_color
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'red'), ('color', 'red'), ('correct', 'r')]),
      OrderedDict([('word', 'red'), ('color', 'green'), ('correct', 'g')]),
      OrderedDict([('word', 'red'), ('color', 'blue'), ('correct', 'b')]),
      OrderedDict([('word', 'green'), ('color', 'red'), ('correct', 'r')]),
      OrderedDict([('word', 'green'), ('color', 'green'), ('correct', 'g')]),
      OrderedDict([('word', 'green'), ('color', 'blue'), ('correct', 'b')]),
      OrderedDict([('word', 'blue'), ('color', 'red'), ('correct', 'r')]),
      OrderedDict([('word', 'blue'), ('color', 'green'), ('correct', 'g')]),
      OrderedDict([('word', 'blue'), ('color', 'blue'), ('correct', 'b')])]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine thanks
